<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="220" FOVy="220" FOVz="1" GradMaxAmpl="13" GradSlewRate="32" Name="P" Nx="220" Ny="220" Nz="1" TE="5" TR="1000">
   <ConcatSequence LoopFlag="1" Name="Sloop" Observe="NZ=P.Nz" Repetitions="NZ">
      <CONCATSEQUENCE Aux1="64" LoopFlag="2" Name="Intl" Observe="Dummys=Intl.Aux1" Repetitions="15+Dummys">
         <ATOMICSEQUENCE Name="Slice">
            <SINCRFPULSE Apodization="0.5" Bandwidth="2" FlipAngle="10" Frequency="DZ*GA*(SLC-(Slices-1) /2)" InitialDelay="RUT" Name="P1" Observe="SLC=Sloop.Counter, Slices=Sloop.Repetitions, DZ=P.Dz, GA=GSS.Amplitude, RUT=GSS.RampUpTime" Zeros="2.5"/>
            <TRAPGRADPULSE Axis="GZ" FlatTopArea="2*D*BW*FTA" FlatTopTime="D" Name="GSS" Observe="D=P1.Duration, BW=P1.Bandwidth, FTA=P.KMAXz"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="Pre">
            <TRAPGRADPULSE Area="-A/2" Axis="GZ" Name="rphZ" Observe="A=GSS.Area"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="TE" DelayType="C2E" Name="TE" Observe="TE=P.TE" StartSeq="Slice" StopSeq="TE"/>
         <ATOMICSEQUENCE Name="Read" Observe="R=Intl.Repetitions, IL=Intl.Counter, Dummys=Intl.Aux1" RotAngle="360*IL/(R-Dummys)*gt(IL,Dummys-1)">
            <EMPTYPULSE ADCFlag="2" ADCs="4940*gt(IL, Dummys-1)" Axis="NONE" Duration="DUR-0.02" Name="ADCs" Observe="DUR=SPox.Duration, IL=Intl.Counter,  Dummys=Intl.Aux1"/>
            <SPIRALGRADPULSE ADCFlag="1" Axis="GX" FOV="FOV" GradRasterTime="0.01" Interleaves="Rep-Dummys" Inward="1" MaxAmpl="MaxGrad" Name="SPox" Observe="FOV=P.FOVx, NX = P.Nx, Rep=Intl.Repetitions,  Dummys=Intl.Aux1, Slew=P.GradSlewRate, MaxGrad=P.GradMaxAmpl" Resolution="FOV/NX" SlewRate="Slew"/>
            <SPIRALGRADPULSE ADCFlag="1" Axis="GY" FOV="FOV" GradRasterTime="Raster" Interleaves="Intl" Inward="1" MaxAmpl="MaxGrad" Name="SPoy" Observe="NX = P.Nx, Intl = SPox.Interleaves, FOV = P.FOVx, Raster=SPox.GradRasterTime, Slew=SPox.SlewRate, MaxGrad=SPox.MaxAmpl" Resolution="FOV/NX" SlewRate="Slew"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="Rephaser">
            <TRAPGRADPULSE Area="-(Ax*cos(-IL/(R-Dummys)*2*Pi)-Ay*sin(-IL/(R-Dummys)*2*Pi))*gt(IL,Dummys-1)-Ax*lt(IL,Dummys)" Axis="GX" Name="Rephx" Observe="Ax=SPox.Area, Ay=SPoy.Area, R=Intl.Repetitions, IL=Intl.Counter, Dummys=Intl.Aux1"/>
            <TRAPGRADPULSE Area="-(Ax*sin(-IL/(R-Dummys)*2*Pi)+Ay*cos(-IL/(R-Dummys)*2*Pi))*gt(IL,Dummys-1)-Ay*lt(IL,Dummys)" Axis="GY" Name="Rephy" Observe="Ax=SPox.Area, Ay=SPoy.Area, R=Intl.Repetitions, IL=Intl.Counter, Dummys=Intl.Aux1"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="Spoil">
            <TRAPGRADPULSE ADCFlag="1" Area="4*Pi" Axis="GZ" Name="Spoilz"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="TR" DelayType="B2E" Name="TR" Observe="TR=P.TR" StartSeq="Slice" StopSeq="TR"/>
      </CONCATSEQUENCE>
   </ConcatSequence>
</Parameters>